PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = file00_hello_world_xls
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $image_name
      size = (0.5,0.136)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'image_name': 'stimulus.png'}]
    conditionsFile = hello-world-loop.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
