PsychoPy2experiment version="2022.2.0"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = file09_images
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        function getRandomFloat(min, max, decimals) {
            const n = (Math.random() * (max - min) + min).toFixed(decimals);
            return n;
          }

        trialn = (trialn + 1);
        this_image = image_list[trialn];
        this_aspect_ratio = [0.75, 0.5];
        this_size = [0.5, 0.5];
        min_value_x = (- 0.375);
        max_value_x = 0.375;
        min_value_y = (- 0.25);
        max_value_y = 0.25;
        this_position_x = getRandomFloat(min_value_x, max_value_x, 3);
        this_position_y = getRandomFloat(min_value_y, max_value_y, 3);
        image.image = this_image;
        image.size = this_aspect_ratio;
        image.pos = [this_position_x, this_position_y];
      Begin Routine:
        trialn = trialn + 1
        this_image = image_list[trialn]
        this_aspect_ratio = [0.75, 0.5]
        this_size = [0.5, 0.5]
        # If the size is 0.5 of the height
        # then the position has to be less than 0.25 and
        # greater than -0.25 in the y dimension to avoid
        # image being shown at least partially offscreen
        # but x can be wider
        min_value_x = -0.375
        max_value_x = 0.375
        min_value_y = -0.25
        max_value_y = 0.25
        this_position_x = random.uniform(min_value_x, max_value_x)
        this_position_y = random.uniform(min_value_y, max_value_y)
        image.image = this_image
        image.size = this_aspect_ratio
        image.pos = [this_position_x, this_position_y]
    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine setup_expt
    CodeComponent code1
      Code Type = Auto->JS
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      Begin Routine:
        image_list = ["cat1.jpg","cat2.jpg","cat3.jpg","cat4.jpg","cat5.jpg","dog1.jpg","dog2.jpg","dog3.jpg","dog4.jpg","dog5.jpg"]
        shuffle(image_list)
        trialn = -1 # so we can use it as an index that has to start at 0
    CodeComponent code_2
      Code Type = Py
      disabled = True
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      Begin Experiment:
        import random
        from random import uniform
  Routine bye
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thanks, this is the end
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Flow
  Routine setup_expt
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_sequence.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'animal_image': 'cat1.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat2.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat3.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat4.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat5.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'dog1.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog2.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog3.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog4.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog5.jpg', 'animal_type': 'dog', 'expected_answer': 'd'}]
    Routine trial
  LoopTerminator trials
  Routine bye
