PsychoPy2experiment version="2022.2.0"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = file1
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will be presented with a picture of an animal: either a cat or a dog.

        Your task is to identify the animal as quickly as possible, while avoiding errors, by pressing the 'c' key if it is a cat or the 'd' key if it is a dog.

        Press 'space' when you are ready to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
