PsychoPy2experiment version="2022.2.0"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = file6
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will be presented with a picture of an animal: either a cat or a dog.

        Your task is to identify the animal as quickly as possible, while avoiding errors, by pressing the 'c' key if it is a cat or the 'd' key if it is a dog.

        Press 'space' when you are ready to continue.
    KeyboardComponent intro_dismiss
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent stimulus
      image [set during: interval.ISI] = $animal_image
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent response
      allowedKeys = 'c','d'
      correctAns = $expected_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine interval
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
    TextComponent wrong
      color = red
      letterHeight = 0.05
      startVal [condition] = response.keys is not None and response.corr==0
      stopVal [duration (s)] = 2
      text = WRONG!!
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    TextComponent right
      color = green
      letterHeight = 0.05
      startVal [condition] = response.keys is not None and response.corr==1
      stopVal [duration (s)] = 2
      text = CORRECT!!
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    TextComponent timedout
      letterHeight = 0.05
      startVal [condition] = response.keys is None
      stopVal [duration (s)] = 2
      text = Time out - please respond faster!
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        timer=core.Clock()
      Begin Routine:
        t0=timer.getTime()
      Each Frame:
        t1=timer.getTime()
        elapsed=t1-t0
        if elapsed>2:
            continueRoutine=False
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_sequence.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'animal_image': 'cat1.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat2.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat3.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat4.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat5.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'dog1.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog2.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog3.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog4.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog5.jpg', 'animal_type': 'dog', 'expected_answer': 'd'}]
    Routine interval
    Routine trial
    Routine feedback
  LoopTerminator trials
