PsychoPy2experiment version="2022.2.0"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = file7
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will be presented with a picture of an animal: either a cat or a dog.

        Your task is to identify the animal as quickly as possible, while avoiding errors, by pressing the 'c' key if it is a cat or the 'd' key if it is a dog.

        Press 'space' when you are ready to continue.
    KeyboardComponent intro_dismiss
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent stimulus
      image [set during: interval.ISI] = $animal_image
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent response
      allowedKeys = 'c','d'
      correctAns = $expected_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine interval
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
    TextComponent text
      color [set every repeat] = $feedback_colour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine evaluate_response
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        sum_ac=0
        sum_rt=0
        mean_ac=0
        mean_rt=0
      Begin Routine:
        if response.keys:
            if response.corr==1:
                sum_ac=sum_ac+1
                sum_rt=sum_rt+response.rt
                feedback_colour="green"
                feedback_text="CORRECT!"
            if response.corr==0:
                sum_rt=sum_rt+response.rt
                feedback_colour="red"
                feedback_text="Wrong!"
        else:
            sum_rt=sum_rt+2.0
            feedback_colour="black"
            feedback_text="Timed out - please respond faster!"
        mean_ac=sum_ac/(trials.thisTrialN+1)
        mean_rt=sum_rt/(trials.thisTrialN+1)
  Routine feedback_averages
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        mean_rt_message=""
        mean_ac_message=""
      Begin Routine:
        mean_rt_message="Your mean RT is: "+str(round(mean_rt,3)*1000)+"ms"
        mean_ac_message="Your mean accuracy is: " +str(round(mean_ac,2)*100)+"%"
    TextComponent rtmess
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $mean_rt_message
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    TextComponent acmess
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $mean_ac_message
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_sequence.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'animal_image': 'cat1.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat2.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat3.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat4.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat5.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'dog1.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog2.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog3.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog4.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog5.jpg', 'animal_type': 'dog', 'expected_answer': 'd'}]
    Routine interval
    Routine trial
    Routine evaluate_response
    Routine feedback
    Routine feedback_averages
  LoopTerminator trials
