PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = file10_branching
  keyboardBackend = ioHub
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Routines
  Routine choose
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        timer = core.Clock()
      Begin Routine:
        t0 = timer.getTime()
      Each Frame:
        t1 = timer.getTime()
        elapsed_time = t1-t0
        if mouse.isPressedIn(cats_option):
            flag = "cats"
            input_xls = "cats.xlsx"
            nRepsCats=1
            nRepsDogs=0
            mouse_rt = elapsed_time
            thisExp.addData("mouse_rt", mouse_rt)
            mouse_selection = "cats"
            thisExp.addData("mouse_selection", mouse_selection)
            continueRoutine=False
        if mouse.isPressedIn(dogs_option):
            flag = "dogs"
            input_xls = "dogs.xlsx"
            nRepsCats=0
            nRepsDogs=1
            mouse_rt = elapsed_time
            thisExp.addData("mouse_rt", mouse_rt)
            mouse_selection = "dogs"
            thisExp.addData("mouse_selection", mouse_selection)
            continueRoutine = False
    TextComponent prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see some pictures of animals to rate for typicality.
        Do you prefer to see cats or dogs? Click on your preference.
    TextComponent cats_option
      letterHeight = 0.05
      pos = (-.2, -.3)
      startVal [time (s)] = 0.0
      text = cats
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    TextComponent dogs_option
      letterHeight = 0.05
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text = dogs
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    MouseComponent mouse
      clickable = cats_option, dogs_option
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine cats
    TextComponent text
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Please rate for typicality
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    ImageComponent image
      image [set during: blank.ISI] = $animal_image
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      flip = True
      forceEndRoutine = True
      granularity = 0
      initVal = 3
      labels = "atypical","","neutral","","typical"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine dogs
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please rate for typicality
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    ImageComponent image_2
      image [set during: blank.ISI] = $animal_image
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider_2
      flip = True
      forceEndRoutine = True
      granularity = 0
      initVal = 3
      labels = "atypical","","neutral","","typical"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine ignorecatsif
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if flag == "dogs":
            catloop.finished=True
            continueRoutine=False
  Routine ignoredogsif
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if flag == "cats":
            dogloop.finished=True
            continueRoutine=False
  Routine follow_up
    CodeComponent set_follow
      Code Type = Auto->JS
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      Begin Routine:
        followup_text = "Thanks for taking part."+\
        "Press any key to be sent to the wikipedia page for " +\
        str(flag)
      End Routine:
        import webbrowser
        if flag == "cats":
            url = 'https://en.wikipedia.org/wiki/Cat'
        if flag == "dogs":
            url = 'https://en.wikipedia.org/wiki/Dog'
        webbrowser.open(url)
    TextComponent goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $followup_text
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    KeyboardComponent goodbye_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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Flow
  Routine choose
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator catloop loopType="TrialHandler"
      conditionsFile = $input_xls
      loopType = random
      nReps = nRepsCats
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      Routine blank
      Routine cats
    LoopTerminator catloop
    LoopInitiator dogloop loopType="TrialHandler"
      conditionsFile = $input_xls
      loopType = random
      nReps = nRepsDogs
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      Routine blank
      Routine dogs
    LoopTerminator dogloop
    Routine follow_up
  LoopTerminator trials
