PsychoPy2experiment version="2022.2.0"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = file5
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will be presented with a picture of an animal: either a cat or a dog.

        Your task is to identify the animal as quickly as possible, while avoiding errors, by pressing the 'c' key if it is a cat or the 'd' key if it is a dog.

        Press 'space' when you are ready to continue.
    KeyboardComponent intro_dismiss
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent stimulus
      image [set during: interval.ISI] = $animal_image
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent response
      allowedKeys = 'c','d'
      correctAns = $expected_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine interval
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
    TextComponent text
      color [set every repeat] = $feedback_colour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine evaluate_response
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if response.keys:
            if response.corr==1:
                feedback_colour="green"
                feedback_text="CORRECT!"
            if response.corr==0:
                feedback_colour="red"
                feedback_text="Wrong!"
        else:
            feedback_colour="black"
            feedback_text="Timed out - please respond faster!"
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_sequence.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'animal_image': 'cat1.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat2.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat3.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat4.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'cat5.jpg', 'animal_type': 'cat', 'expected_answer': 'c'},
      {'animal_image': 'dog1.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog2.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog3.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog4.jpg', 'animal_type': 'dog', 'expected_answer': 'd'},
      {'animal_image': 'dog5.jpg', 'animal_type': 'dog', 'expected_answer': 'd'}]
    Routine interval
    Routine trial
    Routine evaluate_response
    Routine feedback
  LoopTerminator trials
