PsychoPy2experiment version="2022.2.0"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sound1
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        timer=core.Clock()
      Begin Routine:
        t0=timer.getTime()
      Each Frame:
        foo=textbox.getText()
        if foo:
            if foo[len(foo)-1]=="\n":
                continueRoutine=False
    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        t1=timer.getTime()
        if (t1-t0) >= 10:
            continueRoutine=False
    SoundComponent sound_1
      sound [set every repeat] = $soundid
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = How many syllables in the word above? Type the number then press Enter.
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  Routine instruct
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be presented with a word on screen.

        Your task is to work out how many syllables the word has, and to respond by typing that number on the keyboard.

        While you do this, on some trials a sound will be played at the same time as the word is on screen.

        Press space when you are ready to continue.
    KeyboardComponent dismiss1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = defineTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialnum': 1, 'soundid': 'ambience_bar_small_001.ogg', 'soundDescription': 'human', 'word': 'ladybug', 'nsyllables': 3},
      {'trialnum': 2, 'soundid': 'ambience_bar_small_001.ogg', 'soundDescription': 'human', 'word': 'dictionary', 'nsyllables': 4},
      {'trialnum': 3, 'soundid': 'ambience_bar_small_001.ogg', 'soundDescription': 'human', 'word': 'university', 'nsyllables': 5},
      {'trialnum': 4, 'soundid': 'ambience_bar_small_001.ogg', 'soundDescription': 'human', 'word': 'macaroni', 'nsyllables': 4},
      {'trialnum': 5, 'soundid': 'ambience_bar_small_001.ogg', 'soundDescription': 'human', 'word': 'precipitation', 'nsyllables': 5},
      {'trialnum': 6, 'soundid': 'A', 'soundDescription': 'musical tone', 'word': 'minnesota', 'nsyllables': 4},
      {'trialnum': 7, 'soundid': 'B', 'soundDescription': 'musical tone', 'word': 'hippopotamus', 'nsyllables': 5},
      {'trialnum': 8, 'soundid': 'C', 'soundDescription': 'musical tone', 'word': 'zebra', 'nsyllables': 2},
      {'trialnum': 9, 'soundid': 'D', 'soundDescription': 'musical tone', 'word': 'cheeseburger', 'nsyllables': 3},
      {'trialnum': 10, 'soundid': 'G', 'soundDescription': 'musical tone', 'word': 'kindergarten', 'nsyllables': 4}]
    Routine trial
  LoopTerminator trials
